PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Flanker_Practice2_M2Group_with_LSL
  keyboardBackend = PsychToolbox
  logging level = error
  runMode = 0
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Routines
  Routine Fixation
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    TextComponent fixation
      letterHeight = 0.2
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $np.random.uniform(0.7, 1.0)
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      text [set every repeat]:
        +
  Routine Stimulus
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    TextComponent stim_text
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $stimulus
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = $None
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent traial_counter
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $"Trial " + str(thisN + 1)
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample([stimulus[0]])
        outlet.push_sample([stimulus[2]])

        print(stimulus[0])
        print(stimulus[2])

        outlet.push_sample([correct_answer])

        print(correct_answer)
      Each Frame:
        if key_resp.status == STARTED and not waitOnFlip:

            theseKeys = key_resp.getKeys(keyList=['space','f','j'], ignoreKeys=["escape"], waitRelease=False)
            _key_resp_allKeys.extend(theseKeys)

            ##### LSL push ######
            #if key_resp.keys in theseKeys:
            if len(_key_resp_allKeys) == 1:
                # Send LSL Marker : Response as string
                mystring = ''.join(map(str,key_resp.keys))
                resp = "ResponseKey: " + mystring
                #print("Response: [%s]" % resp)
                print(key_resp.keys)
                outlet.push_sample([key_resp.keys])  # Push event marker.
  Routine Feedback
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    TextComponent feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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      text [set every repeat]:
        $("Too Slow" if key_resp.keys is None else
        ("Correct" if key_resp.corr == 1 else ("Wrong Key" if key_resp.keys not in ['f','j'] else "Error")))
  Routine Between_trials
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    TextComponent betwwen_trials
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Instructions
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    TextComponent Inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Respond to the MIDDLE letter



        Press F if it is H

        Press J if it is A



        Ignore the letters on the sides



        Press any key to start
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_trials
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    TextComponent start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of practice



        Press any key to start the experiment
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LSL_definition
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
      Begin Experiment:
        info = StreamInfo(name='PschoPy_LSL', type='Markers', channel_count=1, nominal_srate=0, channel_format='string', source_id='psy_marker')

        outlet = StreamOutlet(info) # Broadcast the stream
      End Experiment:
        # 1. Enviar un marcador de final (opcional però recomanat)
        outlet.push_sample(['EndOfExperiment'])

        # 2. Eliminar l'objecte explicitament
        # Això invoca el destructor de la llibreria pylsl que tanca el stream
        del outlet

        # 3. Sortida neta de PsychoPy
        win.close()
        core.quit()
  Routine Pause_for_LSL
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please, make sure that the two LSL streams in LabRecorder (Unicorn and Psychopy) have been synchronised, then press the space bar.
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine LSL_definition
  Routine Pause_for_LSL
  Routine Instructions
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'HHHHH'), ('correct_answer', 'f'), ('condition', 'congruent')]),
      OrderedDict([('stimulus', 'AAAAA'), ('correct_answer', 'j'), ('condition', 'congruent')]),
      OrderedDict([('stimulus', 'HHAHH'), ('correct_answer', 'j'), ('condition', 'incongruent')]),
      OrderedDict([('stimulus', 'AAHAA'), ('correct_answer', 'f'), ('condition', 'incongruent')])]
    Routine Fixation
    Routine Stimulus
    Routine Feedback
    Routine Between_trials
  LoopTerminator practice
  Routine start_trials
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 15
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    conditions:
      [OrderedDict([('stimulus', 'HHHHH'), ('correct_answer', 'f'), ('condition', 'congruent')]),
      OrderedDict([('stimulus', 'AAAAA'), ('correct_answer', 'j'), ('condition', 'congruent')]),
      OrderedDict([('stimulus', 'HHAHH'), ('correct_answer', 'j'), ('condition', 'incongruent')]),
      OrderedDict([('stimulus', 'AAHAA'), ('correct_answer', 'f'), ('condition', 'incongruent')])]
    Routine Fixation
    Routine Stimulus
    Routine Feedback
    Routine Between_trials
  LoopTerminator trials
